PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'age': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = City Tour
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine setup_code_2
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Before Experiment:
        import os
        import csv
        from pathlib import Path
      Begin Experiment:
        # --------------------
        # basic info
        # --------------------
        participant = expInfo['participant']
        age = int(expInfo['age'])
        session = str(expInfo['session'])

        # --------------------
        # paths
        # --------------------
        BASE = Path("/Users/ylin/Desktop/Raven/citytour_spa/src/assets/underwater")
        COND_DIR = Path("conditions")
        ASSIGN_FILE = Path("assignments.csv")

        city_dir = BASE / f"City{session}"

        anim_dir = city_dir / "animations" / "en"
        audio_dir = city_dir / "audio" / "en"
        image_dir = city_dir / "images"
        loc_dir = city_dir / "locations"

        # --------------------
        # auto cohort/version assignment
        # --------------------
        combos = [
            ("A", "1"),
            ("A", "2"),
            ("B", "1"),
            ("B", "2"),
        ]

        existing = []

        if ASSIGN_FILE.exists():
            with open(ASSIGN_FILE, newline="") as f:
                reader = csv.DictReader(f)
                existing = list(reader)

        # if participant already assigned, reuse same assignment
        previous = [r for r in existing if r["participant"] == participant]

        if previous:
            cohort = previous[0]["cohort"]
            version = previous[0]["version"]
        else:
            # count same-age participants per cohort/version
            counts = {combo: 0 for combo in combos}

            for r in existing:
                if int(r["age"]) == age:
                    key = (r["cohort"], r["version"])
                    if key in counts:
                        counts[key] += 1

            # choose least-filled cell
            cohort, version = min(counts, key=counts.get)

            # save assignment
            file_exists = ASSIGN_FILE.exists()

            with open(ASSIGN_FILE, "a", newline="") as f:
                fieldnames = ["participant", "age", "session", "cohort", "version"]
                writer = csv.DictWriter(f, fieldnames=fieldnames)

                if not file_exists:
                    writer.writeheader()

                writer.writerow({
                    "participant": participant,
                    "age": age,
                    "session": session,
                    "cohort": cohort,
                    "version": version
                })

        # save into expInfo too
        expInfo["cohort"] = cohort
        expInfo["version"] = version

        # --------------------
        # condition files
        # --------------------
        condition_file = str(COND_DIR / f"master_cohort{cohort}.xlsx")
        version_sheet = f"v{version}"

        # --------------------
        # session-specific block control
        # --------------------
        practice_reps = 1 if session == "1" else 0
        retention_reps = 1 if session == "3" else 0

        # --------------------
        # key stimulus paths
        # --------------------
        encoding_video = str(anim_dir / "encoding.mp4")
        gen_first_audio = str(audio_dir / "gen_first.mp3")
  Routine intro
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Flow
  Routine setup_code_2
  Routine intro
